PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EXP 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    GratingComponent grating
      contrast [set every repeat] = level
      mask = circle
      pos [set every repeat] = $location
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() >0.5 :
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)

        distractors = []
      End Routine:
        if random() >0.5 :
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)

        distractors = []

        for i in range(num_distr):

           distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Open Sans',
                pos=(random()- 0.5, random()-0.5), height=0.05, wrapWidth=None, ori=randint(1,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-2.0);

           distractors.append(distr)


        for distr in distractors:
            distr.setAutoDraw(True)
Flow
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [{'label': 'cont', 'startVal': 0.05, 'stepSizes': [0.01, 0.01, 0.005, 0.005], 'maxVal': 1.0, 'minVal': 0.0}]
    conditionsFile = /Users/yashithanki/Downloads/conditions.xlsx
    loopType = interleaved staircases
    nReps = 100
    stairType = simple
    switchMethod = random
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    Routine trial
  LoopTerminator trials
